PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = script
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Routines
  Routine trial
    TextComponent text1
      color = blue
      letterHeight = 0.1
      pos = (-0.75, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      text [set every repeat] = $word1
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    SoundComponent sound1
      sound [set every repeat] = $wrecord1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent text2
      color = blue
      letterHeight = 0.1
      pos = (-0.25, 0)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 12.0
      text [set every repeat] = $word2
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    SoundComponent sound2
      sound [set every repeat] = $wrecord2
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4.0
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    TextComponent prime_text
      color = blue
      letterHeight = 0.1
      pos = (0.25, 0)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $prime
    SoundComponent prime_sound
      sound [set every repeat] = $precord3
      startVal [time (s)] = 8
      stopVal [duration (s)] = 4
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    TextComponent target_text
      color = red
      letterHeight = 0.1
      pos = (0.75, 0)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $target
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    MicrophoneComponent pan_record
      channel = 0
      startVal [time (s)] = 12.0
      stereo = False
      stopVal [duration (s)] = 4.0
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    TextComponent record_notification
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 12.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Please say the word: pan
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  Routine instruction
    TextComponent instructiontext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Welcome to join this experiment.

        Please type 'space' for going to the next page
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent End_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment session.
        Thank you for your time and cooperation.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'Eye'), ('word2', 'Cap'), ('prime', 'Pun'), ('target', '潘'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', 'Prime Item: 潘.close.English')]),
      OrderedDict([('word1', 'Ids'), ('word2', 'gsd'), ('prime', 'fgh'), ('target', '怕'), ('wrecord1', 'Eye.wav'), ('wrecord2', 'Cap.wav'), ('precord3', 'Pun.wav'), ('Rname', 'Prime Item: 怕e.English')])]
    Routine trial
  LoopTerminator trials
  Routine End
